CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|E:\CDoT_Batch5\load_data_csv
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Elsewhere...| Desktop\2023_05_15_Batch1\images\PLATE_ID\Images
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:Orig647, OrigBrightfield, OrigCL488R, OrigCL488Y, OrigCL561YE, OrigDNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:25
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigCL488R
    Name the output image:CL488R
    Select the illumination function:IllumCL488R
    Select how the illumination function is applied:Divide
    Select the input image:OrigCL488Y
    Name the output image:CL488Y
    Select the illumination function:IllumCL488Y
    Select how the illumination function is applied:Divide
    Select the input image:OrigCL561YE
    Name the output image:CL561YE
    Select the illumination function:IllumCL561YE
    Select how the illumination function is applied:Divide
    Select the input image:OrigPhase
    Name the output image:Phase
    Select the illumination function:IllumPhase
    Select how the illumination function is applied:Divide
    Select the input image:Orig647
    Name the output image:_647
    Select the illumination function:Illum647
    Select how the illumination function is applied:Divide
    Select the input image:OrigBrightfield
    Name the output image:Brightfield
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:4|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notes:['']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:5|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notes:[' 0.012->0.014']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CL561YE
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.014,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:6|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:7|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notes:['']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
    Select images to measure:Brightfield, CL488R, CL488Y, CL561YE, DNA, Phase, _647
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:8|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
    Select images to measure:Brightfield, CL488R, CL488Y, CL561YE, DNA, Phase, _647
    Measure within objects?:Yes
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:Brightfield, CL488R, CL488Y, CL561YE, DNA, Phase, _647
    Select objects to measure:Nuclei, Cytoplasm, Cells

MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:13|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
    Select images to measure:Brightfield, CL488R, CL488Y, CL561YE, DNA, Phase, _647
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:Cells, Nuclei, Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:15|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
    Select images to measure:Brightfield, CL488R, CL488Y, CL561YE, DNA, Phase, _647
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

MeasureImageIntensity:[module_num:16|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notes:['Measures the ntensity of the whole image (AGP, BFHigh, BFLow, Brightfield, DNA, ER, Mito, RNA) as well as the intensity of the image only in regions without cells (* _BackgroundOnly).']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
    Select images to measure:Brightfield, CL488R, CL488Y, CL561YE, DNA, Phase, _647
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:21|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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